CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Cell_line>[A-Za-z0-9]*)_(?P<condition>[A-Za-z0-9]*)_(?P<date>[0-9]*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:RAW
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Cell_line
    Metadata category:condition

ColorToGray:[module_num:5|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
    Select the input image:RAW
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Nuclei
    Channel number:2
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    Image name:Spot

GrayToColor:[module_num:6|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:2
    Image name:Nuclei
    Color:#1E50FF
    Weight:0.5
    Image name:Spot
    Color:#F4582E
    Weight:0.5

IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:Spot
    Name the output image:FilteredSpot
    Select the operation:Enhance
    Feature size:9
    Feature type:Speckles
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    Speed and accuracy:Slow
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
RescaleIntensity:[module_num:9|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
    Select the input image:Spot
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Spot
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:1
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:250
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    Thresholding method:Otsu

RelateObjects:[module_num:11|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
    Parent objects:Nuclei
    Child objects:Spot
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Spotchild
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Nuclei_spot_Overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#F8F7FF
    Select objects to display:Nuclei
    Select outline color:#F4005F
    Select objects to display:Spotchild

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_spot_Overlay
    Select method for constructing file names:Single name
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    Enter single file name:Overlay_\g<Cell_line>_\g<condition>_\g<date>
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    Saved file format:tiff
    Output file location:Default Output Folder|/Users/nozais/Downloads
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:Single name
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    Enter single file name:color_\g<Cell_line>__\g<condition>_\g<date>
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/Volumes/CIML$/BNSRLAB/Projects/LAL-T/Analyses/Analyse_microscopie/CellProfiler_analysis/Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Location_Center_Y,Nuclei|Location_Center_Z,Nuclei|Location_Center_X,Nuclei|Children_Spot_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:\g<Cell_line>_\g<condition>_\g<date>.csv
    Use the object name for the file name?:No
